OpenViBE-Scenario(FormatVersion=1, Creator=OpenViBE Designer, CreatorVersion=2.1.0)
Comment
  World Tour System Zero Online Session

  Code to perform an online session.

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1025
#0.Signal stream -> Channel Selector "1:7" => #1
  Channel List = 1:7
  Action = Select
  Channel Matching Method = Smart
Input Signal=#1, Input Stimulations=#0.Stimulations -> Generic stream writer "Rawdata Acquisition"
  Filename = C:/Users/NTH417/Desktop/Drone/Zero/Online/Data/ZeroOnline-[$core{date}-$core{time}].ov
  Use compression = false
New input[0]=#1, New input[1]=#0.Stimulations -> OnlineSession
  Clock frequency (Hz) = 1
  Script = C:/Users/NTH417/Desktop/Drone/Zero/SourceCode/DroneOnlineZeroCNN.py
#0.Stimulations -> Player Controller "Stop Trigger"
  Stimulation name = OVTK_StimulationId_Number_08
  Action to perform = Stop
